PsychoPy2experiment version="1.80.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = Philips_3T
  color = $[-0.625,-0.625,-0.625]
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = retmap_eyetrack
  Units = pix
  Screen = 2
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Routines
  Routine subject_ready
    TextComponent subject_ready_question
      wrapWidth = 20
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
                            Es kann los gehen!
        Bitte drücke eine Taste, wenn du bereit bist
    KeyboardComponent subject_ready_response
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine movie_segment
    KeyboardComponent skip_movie_segment
      stopVal [duration (s)] = 180
      forceEndRoutine = True
      allowedKeys = 's'
      startVal [time (s)] = 0
      store = nothing
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    MovieComponent movie_clip
      movie [set every repeat] = $videos
      stopVal [duration (s)] = 164
      forceEndRoutine = False
      units = pix
      startVal [time (s)] = 4.00
      backend = cv2+vlc
      size = [1280, 1024]
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    GratingComponent reading_task
      tex = None
      color = $[-1,-1,-1]
      stopVal [duration (s)] = 180
      mask = circle
      units = deg
      startVal [time (s)] = 0.0
      sf = None
      size = [0.8, 0.8]
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    TextComponent letter_stimulus
      stopVal [duration (s)] = 180
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    CodeComponent logging_in_every_frame
      Begin Experiment:
        # -*- coding: utf-8 -*-
        import numpy as np
        import codecs
        from datetime import datetime
        import random

        song_files = [f for f in os.listdir('songs')]
        random.shuffle(song_files)
        song_index=0
      Each Frame:
        if np.mod(frameN, np.floor((screen_refresh / flicker_freq))) == 0 or frameN == 0:
            letter_counter += 1
            if letter_counter >= len(letters):
                # loop letters
                letter_counter=0
            letter_stimulus.setText(letters[letter_counter])

        if np.mod(frameN, screen_refresh / flicker_freq) < (screen_refresh / flicker_freq) - 5:
            letter_stimulus.draw()
        elif np.mod(frameN, screen_refresh / flicker_freq) == (screen_refresh / flicker_freq) - 5:
            letter_stimulus.setText('')
            logging.exp("Set letter_stimulus dc")
      Begin Routine:
        n_movieframes = 0
        last_movietime = None
        lastframe_time = None
        movie_frame_increments = []
        realtime_frame_increments = []
        movie_lags = []


        #read the story file and prepare the letters to be displayed
        filename='songs/'+song_files[song_index]
        logging.exp("Story file displayed: "+str(filename))
        storyfile = codecs.open(filename, encoding='utf-8')
        real_artist = song_files[song_index].split('-')[0].replace('_', ' ')
        fake_artist = real_artist
        while fake_artist == real_artist:
            fake_artist = song_files[random.randint(0, len(song_files) - 1)].split('-')[0].replace('_', ' ')
        artists = [real_artist, fake_artist]
        random.shuffle(artists)
        artist_choice_text = "%s oder %s" % tuple(artists)
        logging.exp("artist order: %s" % artists)

        song_index+=1
        letters = storyfile.read()
        letters = '  '.join(letters.split())+'  '
        storyfile.close()
        letter_counter=-1

        #letter_stimulus.setText(letters[letter_counter])
        screen_refresh = 60.0 # Hz
        flicker_freq = 1.5 # Hz
      End Experiment:
        #import pylab as pl
        #pl.subplot(1,2,1)
        #pl.hist(realtime_frame_increments, bins=100)
        #pl.title('Distance of two movie frames in real time')
        #pl.xlabel('Time in secs')
        #pl.subplot(1,2,2)
        #pl.hist(movie_lags, bins=100)
        #pl.title('Lag between movie time and real time for all frames')
        #pl.xlabel('Time in seconds')
        #print "Movie frames played:", n_movieframes
        #print 'Mean movie frame increment:', np.mean(movie_frame_increments), 's (', 1./np.mean(movie_frame_increments), 'fps )'
        #print 'Unique movie frame increments', np.unique(movie_frame_increments)
        #pl.show()
  Routine end
    GratingComponent grating
      tex = sin
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 10
      units = norm
      startVal [time (s)] = 0.0
      sf = None
      size = [10,10]
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    TextComponent end_screen
      color = gray
      text = Das war's. Vielen Dank!
      stopVal [duration (s)] = 10
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine segment_end
    TextComponent segment_end_break
      wrapWidth = 20
      stopVal [duration (s)] = 7
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
                   Das war's.

        Bitte schliesse die Augen.

              Gleich wird es hell.
  Routine trigger_sync
    TextComponent wait_for_it
      wrapWidth = 20
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Bitte lies den Text in der Mitte.

           Buchstabe für Buchstabe.

             Wer singt dieses Lied?
    KeyboardComponent kb_trigger_sync
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent welcome
      wrapWidth = 20
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Die Vorbereitungen laufen...
        Bitte ein klein wenig Geduld.
    KeyboardComponent start_by_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine behav_task_query
    TextComponent which_artist
      wrapWidth = 20
      text = Welcher Künstler singt dieses Lied?
      durationEstim = 4
      pos = [0, 1.5]
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent artist_choice
      wrapWidth = 25
      text [set every repeat] = $artist_choice_text
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = .8
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    KeyboardComponent artist_response
      forceEndRoutine = True
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent button_cue
      wrapWidth = 20
      text = <<            >>
      pos = [0, -1.5]
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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Flow
  Routine start
  LoopInitiator retmap_trials loopType="TrialHandler"
    conditionsFile = video_names.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos': u'/home/ayan/Documents/Ph.D._Neuroscience/mh_project/pyretmap/videos/motion_rand_color_dots_ring/ring_contract_48.mp4'},
      {'videos': u'/home/ayan/Documents/Ph.D._Neuroscience/mh_project/pyretmap/videos/motion_rand_color_dots_ring_expand/ring_expand_48.mp4'},
      {'videos': u'/home/ayan/Documents/Ph.D._Neuroscience/mh_project/pyretmap/videos/motion_rand_color_dots_wedge/wedge_counter_48.mp4'},
      {'videos': u'/home/ayan/Documents/Ph.D._Neuroscience/mh_project/pyretmap/videos/motion_rand_color_dots_wedge_clock/wedge_clock_48.mp4'}]
    Routine subject_ready
    Routine trigger_sync
    Routine movie_segment
    Routine behav_task_query
  LoopTerminator retmap_trials
  Routine segment_end
