PsychoPy2experiment version="1.80.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = Philips_3T
  color = $[-0.012,-0.012,-0.012]
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  Save csv file = True
  expName = visual_localizers
  Units = deg
  Screen = 2
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Routines
  Routine post_run_trailer
    TextComponent post_run_fix
      text = +
      stopVal [duration (s)] = 12
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent text
      wrapWidth = 20
      stopVal [duration (s)] = 10
      units = deg
      startVal [time (s)] = 12
      letterHeight = 1
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      text:
        Kurze Pause

        (entspann die Augen)
  Routine pre_run_sync
    TextComponent vp_instructions
      wrapWidth = 20
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Gleich geht's los!

        Bitte fixiere die ganze Zeit das Kreuz.

        Drücke die linke Taste, wenn das selbe Bild zweimal hintereinander erscheint (auch seitenverkehrt).
    KeyboardComponent run_trigger_sync
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent pre_run_code
      End Routine:
        logging.log(level=logging.EXP, msg='MYLOG: START RUN %s' % block_order_spec)
  Routine pre_block_trigger_sync
    TextComponent pre_block_fix
      color = green
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent block_trigger_sync
      durationEstim = 1.5
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0
      store = first key
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    CodeComponent pre_block_code
      End Routine:
        logging.log(level=logging.EXP, msg='MYLOG: START BLOCK %s [%s]' % (block_condition, image_order_spec))
  Routine wait_start
    TextComponent waiting
      color = black
      text = Waiting for the run to start...
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    ImageComponent show_img1
      stopVal [duration (s)] = .9
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $img1
      size = [550, 550]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.1
      durationEstim = .1
      startEstim = 1.9
      startVal [time (s)] = 1.9
    ImageComponent show_img2
      stopVal [duration (s)] = .9
      units = pix
      startVal [time (s)] = 1
      image [set every repeat] = $img2
      size = [550, 550]
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    KeyboardComponent mirror_key_response
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent trial_fix
      color = green
      text = +
      stopVal [duration (s)] = 2
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine instruct
    TextComponent start_docs
      wrapWidth = 20
      units = deg
      startVal [time (s)] = 0
      letterHeight = 1
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      text:
        Wir warten auf den Start
        durch den Versuchsleiter...
    KeyboardComponent wait_start_exp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine ende
    TextComponent post_exp_thanks
      wrapWidth = 20
      stopVal [duration (s)] = 12
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Das war's!
        Bitte schliesse die Augen.
        Gleich wird es hell!
  Routine inter_block_rest
    TextComponent post_block_fix
      text = +
      stopVal [time (s)] = 6.5
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine pre_run_preparation
    TextComponent pre_run_fix
      text = +
      stopVal [time (s)] = 10.5
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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Flow
  Routine instruct
  LoopInitiator run_loop loopType="TrialHandler"
    conditionsFile = specs/run_order.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'block_order_spec': u'specs/run00_block_order.csv'},
      {'block_order_spec': u'specs/run01_block_order.csv'},
      {'block_order_spec': u'specs/run02_block_order.csv'},
      {'block_order_spec': u'specs/run03_block_order.csv'}]
    Routine pre_run_sync
    Routine pre_run_preparation
    LoopInitiator block_loop loopType="TrialHandler"
      conditionsFile = $block_order_spec
      loopType = sequential
      nReps = 1
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      Routine pre_block_trigger_sync
      LoopInitiator img_loop loopType="TrialHandler"
        conditionsFile = $image_order_spec
        loopType = sequential
        nReps = 1
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        Routine trial
      LoopTerminator img_loop
      Routine inter_block_rest
    LoopTerminator block_loop
    Routine post_run_trailer
  LoopTerminator run_loop
  Routine ende
